PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = 'mainbright_' + expInfo['date']
  Experiment info = {'pp': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['rsc/bank-1300155_640.png', 'imgs/blob_0.png', 'imgs/blob_0_r1.png', 'imgs/blob_0_r2.png', 'imgs/blob_0_r3.png', 'imgs/blob_1.png', 'imgs/blob_1_r1.png', 'imgs/blob_1_r2.png', 'imgs/blob_1_r3.png', 'imgs/blob_3.png', 'imgs/blob_3_r1.png', 'imgs/blob_3_r2.png', 'imgs/blob_3_r3.png', 'imgs/blob_4.png', 'imgs/blob_4_r1.png', 'imgs/blob_4_r2.png', 'imgs/blob_4_r3.png', 'imgs/blob_7.png', 'imgs/blob_7_r1.png', 'imgs/blob_7_r2.png', 'imgs/blob_7_r3.png', 'imgs/blob_9.png', 'imgs/blob_9_r1.png', 'imgs/blob_9_r2.png', 'imgs/blob_9_r3.png', 'imgs/blob_12.png', 'imgs/blob_12_r1.png', 'imgs/blob_12_r2.png', 'imgs/blob_12_r3.png', 'imgs/blob_13.png', 'imgs/blob_13_r1.png', 'imgs/blob_13_r2.png', 'imgs/blob_13_r3.png', 'imgs/blob_15.png', 'imgs/blob_15_r1.png', 'imgs/blob_15_r2.png', 'imgs/blob_15_r3.png', 'imgs/blob_18.png', 'imgs/blob_30.png', 'imgs/blob_30_r1.png', 'imgs/blob_30_r2.png', 'imgs/blob_30_r3.png', 'imgs/blob_35.png', 'imgs/blob_35_r1.png', 'imgs/blob_35_r2.png', 'imgs/blob_35_r3.png', 'imgs/blob_37.png', 'imgs/blob_37_r1.png', 'imgs/blob_37_r2.png', 'imgs/blob_37_r3.png', 'imgs/blob_49.png', 'imgs/blob_49_r1.png', 'imgs/blob_49_r2.png', 'imgs/blob_49_r3.png', 'imgs/blob_56.png', 'imgs/blob_56_r1.png', 'imgs/blob_56_r2.png', 'imgs/blob_56_r3.png', 'imgs/blob_57.png', 'imgs/blob_57_r1.png', 'imgs/blob_57_r2.png', 'imgs/blob_57_r3.png', 'imgs/blob_58.png', 'imgs/blob_66.png', 'imgs/blob_66_r1.png', 'imgs/blob_66_r2.png', 'imgs/blob_66_r3.png', 'imgs/blob_67.png', 'imgs/blob_67_r1.png', 'imgs/blob_67_r2.png', 'imgs/blob_67_r3.png', 'imgs/blob_69.png', 'imgs/blob_69_r1.png', 'imgs/blob_69_r2.png', 'imgs/blob_69_r3.png', 'imgs/blob_72.png', 'imgs/blob_72_r1.png', 'imgs/blob_72_r2.png', 'imgs/blob_72_r3.png', 'imgs/blob_74.png', 'imgs/blob_77.png', 'imgs/blob_77_r1.png', 'imgs/blob_77_r2.png', 'imgs/blob_77_r3.png', 'imgs/blob_80.png', 'imgs/blob_80_r1.png', 'imgs/blob_80_r2.png', 'imgs/blob_80_r3.png', 'imgs/blob_87.png', 'imgs/blob_87_r1.png', 'imgs/blob_87_r2.png', 'imgs/blob_87_r3.png', 'imgs/blob_88.png', 'imgs/blob_88_r1.png', 'imgs/blob_88_r2.png', 'imgs/blob_88_r3.png', 'imgs/blob_89.png', 'imgs/blob_89_r1.png', 'imgs/blob_89_r2.png', 'imgs/blob_89_r3.png', 'imgs/blob_91.png', 'imgs/blob_91_r1.png', 'imgs/blob_91_r2.png', 'imgs/blob_91_r3.png', 'imgs/blob_98.png', 'imgs/blob_100.png', 'imgs/blob_100_r1.png', 'imgs/blob_100_r2.png', 'imgs/blob_100_r3.png', 'imgs/blob_103.png', 'imgs/blob_107.png', 'imgs/blob_107_r1.png', 'imgs/blob_107_r2.png', 'imgs/blob_107_r3.png', 'imgs/blob_109.png', 'imgs/blob_109_r1.png', 'imgs/blob_109_r2.png', 'imgs/blob_109_r3.png', 'imgs/blob_114.png', 'imgs/blob_119.png', 'imgs/blob_119_r1.png', 'imgs/blob_119_r2.png', 'imgs/blob_119_r3.png', 'imgs/blob_124.png', 'imgs/blob_125.png', 'imgs/blob_125_r1.png', 'imgs/blob_125_r2.png', 'imgs/blob_125_r3.png', 'imgs/blob_129.png', 'imgs/blob_129_r1.png', 'imgs/blob_129_r2.png', 'imgs/blob_129_r3.png', 'imgs/blob_131.png', 'imgs/blob_135.png', 'imgs/blob_135_r1.png', 'imgs/blob_135_r2.png', 'imgs/blob_135_r3.png', 'imgs/blob_137.png', 'imgs/blob_137_r1.png', 'imgs/blob_137_r2.png', 'imgs/blob_137_r3.png', 'imgs/blob_143.png', 'imgs/blob_143_r1.png', 'imgs/blob_143_r2.png', 'imgs/blob_143_r3.png', 'imgs/blob_144.png', 'imgs/blob_151.png', 'imgs/blob_151_r1.png', 'imgs/blob_151_r2.png', 'imgs/blob_151_r3.png', 'imgs/blob_152.png', 'imgs/blob_152_r1.png', 'imgs/blob_152_r2.png', 'imgs/blob_152_r3.png', 'imgs/blob_153.png', 'imgs/blob_153_r1.png', 'imgs/blob_153_r2.png', 'imgs/blob_153_r3.png', 'imgs/blob_165.png', 'imgs/blob_165_r1.png', 'imgs/blob_165_r2.png', 'imgs/blob_165_r3.png', 'imgs/blob_166.png', 'imgs/blob_171.png', 'imgs/blob_171_r1.png', 'imgs/blob_171_r2.png', 'imgs/blob_171_r3.png', 'imgs/blob_180.png', 'imgs/blob_180_r1.png', 'imgs/blob_180_r2.png', 'imgs/blob_180_r3.png', 'imgs/blob_185.png', 'imgs/blob_185_r1.png', 'imgs/blob_185_r2.png', 'imgs/blob_185_r3.png', 'imgs/blob_187.png', 'imgs/blob_187_r1.png', 'imgs/blob_187_r2.png', 'imgs/blob_187_r3.png', 'imgs/blob_188.png', 'imgs/blob_188_r1.png', 'imgs/blob_188_r2.png', 'imgs/blob_188_r3.png', 'imgs/blob_189.png', 'imgs/blob_189_r1.png', 'imgs/blob_189_r2.png', 'imgs/blob_189_r3.png', 'imgs/blob_193.png', 'imgs/blob_193_r1.png', 'imgs/blob_193_r2.png', 'imgs/blob_193_r3.png', 'imgs/blob_202.png', 'imgs/blob_202_r1.png', 'imgs/blob_202_r2.png', 'imgs/blob_202_r3.png', 'imgs/blob_204.png', 'imgs/blob_204_r1.png', 'imgs/blob_204_r2.png', 'imgs/blob_204_r3.png', 'imgs/blob_207.png', 'imgs/blob_207_r1.png', 'imgs/blob_207_r2.png', 'imgs/blob_207_r3.png', 'imgs/blob_211.png', 'imgs/blob_212.png', 'imgs/blob_215.png', 'imgs/blob_215_r1.png', 'imgs/blob_215_r2.png', 'imgs/blob_215_r3.png', 'imgs/blob_218.png', 'imgs/blob_239.png', 'imgs/blob_239_r1.png', 'imgs/blob_239_r2.png', 'imgs/blob_239_r3.png', 'imgs/blob_242.png', 'imgs/blob_242_r1.png', 'imgs/blob_242_r2.png', 'imgs/blob_242_r3.png', 'imgs/blob_247.png', 'imgs/blob_247_r1.png', 'imgs/blob_247_r2.png', 'imgs/blob_247_r3.png', 'imgs/blob_249.png', 'imgs/blob_250.png', 'imgs/blob_250_r1.png', 'imgs/blob_250_r2.png', 'imgs/blob_250_r3.png', 'imgs/blob_254.png', 'imgs/blob_254_r1.png', 'imgs/blob_254_r2.png', 'imgs/blob_254_r3.png', 'imgs/blob_257.png', 'imgs/blob_257_r1.png', 'imgs/blob_257_r2.png', 'imgs/blob_257_r3.png', 'imgs/blob_260.png', 'imgs/blob_260_r1.png', 'imgs/blob_260_r2.png', 'imgs/blob_260_r3.png', 'imgs/blob_262.png', 'imgs/blob_262_r1.png', 'imgs/blob_262_r2.png', 'imgs/blob_262_r3.png', 'imgs/blob_263.png', 'imgs/blob_263_r1.png', 'imgs/blob_263_r2.png', 'imgs/blob_263_r3.png', 'imgs/blob_267.png', 'imgs/blob_267_r1.png', 'imgs/blob_267_r2.png', 'imgs/blob_267_r3.png', 'imgs/blob_269.png', 'imgs/blob_269_r1.png', 'imgs/blob_269_r2.png', 'imgs/blob_269_r3.png', 'imgs/blob_271.png', 'imgs/blob_271_r1.png', 'imgs/blob_271_r2.png', 'imgs/blob_271_r3.png', 'imgs/blob_275.png', 'imgs/blob_275_r1.png', 'imgs/blob_275_r2.png', 'imgs/blob_275_r3.png', 'imgs/blob_278.png', 'imgs/blob_278_r1.png', 'imgs/blob_278_r2.png', 'imgs/blob_278_r3.png', 'imgs/blob_279.png', 'imgs/blob_279_r1.png', 'imgs/blob_279_r2.png', 'imgs/blob_279_r3.png', 'imgs/blob_280.png', 'imgs/blob_280_r1.png', 'imgs/blob_280_r2.png', 'imgs/blob_280_r3.png', 'imgs/blob_287.png', 'imgs/blob_287_r1.png', 'imgs/blob_287_r2.png', 'imgs/blob_287_r3.png', 'imgs/blob_289.png', 'imgs/blob_289_r1.png', 'imgs/blob_289_r2.png', 'imgs/blob_289_r3.png', 'imgs/blob_294.png', 'imgs/blob_294_r1.png', 'imgs/blob_294_r2.png', 'imgs/blob_294_r3.png', 'imgs/blob_295.png', 'imgs/blob_295_r1.png', 'imgs/blob_295_r2.png', 'imgs/blob_295_r3.png', 'imgs/blob_296.png', 'imgs/blob_296_r1.png', 'imgs/blob_296_r2.png', 'imgs/blob_296_r3.png', 'imgs/blob_301.png', 'imgs/blob_302.png', 'imgs/blob_302_r1.png', 'imgs/blob_302_r2.png', 'imgs/blob_302_r3.png', 'imgs/blob_308.png', 'imgs/blob_308_r1.png', 'imgs/blob_308_r2.png', 'imgs/blob_308_r3.png', 'imgs/blob_310.png', 'imgs/blob_310_r1.png', 'imgs/blob_310_r2.png', 'imgs/blob_310_r3.png', 'imgs/blob_311.png', 'imgs/blob_311_r1.png', 'imgs/blob_311_r2.png', 'imgs/blob_311_r3.png', 'imgs/blob_312.png', 'imgs/blob_312_r1.png', 'imgs/blob_312_r2.png', 'imgs/blob_312_r3.png', 'imgs/blob_313.png', 'imgs/blob_313_r1.png', 'imgs/blob_313_r2.png', 'imgs/blob_313_r3.png', 'imgs/blob_320.png', 'imgs/blob_321.png', 'imgs/blob_322.png', 'imgs/blob_322_r1.png', 'imgs/blob_322_r2.png', 'imgs/blob_322_r3.png', 'imgs/blob_324.png', 'imgs/blob_324_r1.png', 'imgs/blob_324_r2.png', 'imgs/blob_324_r3.png', 'imgs/blob_339.png', 'imgs/blob_339_r1.png', 'imgs/blob_339_r2.png', 'imgs/blob_339_r3.png', 'imgs/blob_345.png', 'imgs/blob_345_r1.png', 'imgs/blob_345_r2.png', 'imgs/blob_345_r3.png', 'imgs/blob_347.png', 'imgs/blob_347_r1.png', 'imgs/blob_347_r2.png', 'imgs/blob_347_r3.png', 'imgs/blob_355.png', 'imgs/blob_355_r1.png', 'imgs/blob_355_r2.png', 'imgs/blob_355_r3.png', 'imgs/blob_359.png', 'imgs/blob_359_r1.png', 'imgs/blob_359_r2.png', 'imgs/blob_359_r3.png', 'imgs/blob_362.png', 'imgs/blob_362_r1.png', 'imgs/blob_362_r2.png', 'imgs/blob_362_r3.png', 'imgs/blob_363.png', 'imgs/blob_363_r1.png', 'imgs/blob_363_r2.png', 'imgs/blob_363_r3.png', 'imgs/blob_366.png', 'imgs/blob_369.png', 'imgs/blob_369_r1.png', 'imgs/blob_369_r2.png', 'imgs/blob_369_r3.png', 'imgs/blob_371.png', 'imgs/blob_371_r1.png', 'imgs/blob_371_r2.png', 'imgs/blob_371_r3.png', 'imgs/blob_377.png', 'imgs/blob_378.png', 'imgs/blob_378_r1.png', 'imgs/blob_378_r2.png', 'imgs/blob_378_r3.png', 'imgs/blob_381.png', 'imgs/blob_388.png', 'imgs/blob_389.png', 'imgs/blob_390.png', 'imgs/blob_391.png', 'imgs/blob_392.png', 'imgs/blob_393.png', 'imgs/blob_394.png', 'imgs/blob_395.png', 'imgs/blob_396.png', 'imgs/blob_397.png', 'imgs/blob_398.png', 'imgs/blob_399.png', 'imgs/blob_400.png', 'imgs/blob_401.png', 'imgs/blob_402.png', 'imgs/blob_403.png', 'imgs/blob_404.png', 'imgs/blob_405.png', 'imgs/blob_406.png', 'imgs/blob_407.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = mainbright
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine premature_end
    CodeComponent code_end
      Code Type = JS
      Before JS Experiment:
        var text_end = 'Vielen Dank für Ihre Zeit.'
        var text_end_time = 0
      Begin JS Routine:
        if(isFullscreen() != 1){
            text_end += '\n\n' +
            'Es wurde festgestellt, dass Sie den Vollbildmodus verlassen haben. Deshalb ist eine Fortsetzung der Studie leider nicht möglich.'
            text_end_time = 999999
        }
        /*
        if(condition_met_acc==0 && block_i==2) {
            text_end += '\n\n' +
            'Es liegen Anzeichen vor, dass Sie die Aufgabe nicht ernsthaft bearbeiten. Deshalb ist eine Fortsetzung der Studie leider nicht möglich.'
            text_end_time = 999999
        }
        */
      End JS Routine:
        if(text_end_time>0) {
            quitPsychoJS()
        }
    TextComponent end
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
      text [set every repeat] = $text_end
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    PolygonComponent continue_info_end
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
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    TextComponent continue_border_end
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_end_time
      text = Sie können das Browser-Fenster nun schließen.
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  Routine rt_trial
    ImageComponent image_rt
      image [set every repeat] = $image_path
      size [set every frame] = image_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $deadline
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    TextComponent trial_instruction_text_rt
      letterHeight = textsize
      pos = (0, upper_text)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
      text [set every repeat] = $group_instruction2
      wrapWidth = 1
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    KeyboardComponent key_resp
      allowedKeys = 'a', 'l'
      forceEndRoutine = True
      stopVal [duration (s)] = $deadline
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    PolygonComponent a_border_rt
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
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    PolygonComponent l_border_rt
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
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    TextComponent label_a_rt
      letterHeight = 0.03
      pos = (-.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
      text [set every repeat] = $condition[0]
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    TextComponent label_l_rt
      letterHeight = 0.03
      pos = (.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
      text [set every repeat] = $condition[1]
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    TextComponent a_key_rt
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
      text = A
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    TextComponent l_key_rt
      color = black
      letterHeight = 0.05
      pos = (.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $deadline
      text [set every repeat] = L
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    CodeComponent code_rt
      Code Type = JS
      Before JS Experiment:
        var feedback_text = "Falsch!"
        var feedback_color = color_false
      Begin JS Experiment:
        var cutoff
        var cutoff_translated
        var trial_type
      Begin JS Routine:
        cutoff = imgs[block_i]['cutoff'][trial_i] //< .5 = dunkel; >.5 = hell
        trial_type = imgs[block_i]['trial_type'][trial_i]

        if (cutoff < .5) {
            cutoff_translated = "dark"
        } else {
            cutoff_translated = "bright"
        }
        console.log(block_images)
        console.log(deadline)
        console.log(image_size)
      End JS Routine:
        feedback_color = color_false;
        feedback_text = 'Falsch!';

        if (block_i == 0) {
            if (cutoff > .5 & key_resp.keys == hell){
                feedback_text = 'Richtig!';
            } else if (cutoff < .5 & key_resp.keys == dunkel) {
                feedback_text = 'Richtig!';
            }
        } else {
            if (group == "control") {
            in_time_responses += 1;
            if (cutoff > .5 & key_resp.keys == hell) {
                acc_responses +=1;
                feedback_text = '';
            } else if (cutoff < .5 & key_resp.keys == dunkel) {
                    acc_responses +=1;
                    feedback_text = '';
            }
        } else {
            if(typeof key_resp.keys === 'undefined'){
                delayed_responses +=1;
                feedback_text = 'Zu langsam!';
            } else {
                in_time_responses += 1;
                feedback_text = '';
                if (cutoff > .5 & key_resp.keys == hell) {
                        acc_responses +=1;
                }else if (cutoff < .5 & key_resp.keys == dunkel) {
                        acc_responses +=1;
                }
            }
        }
        }

        ISI_length = 0.3

        if(trial_i == block_images.length-1){
            ISI_length = 0
        }
  Routine Interim
    PolygonComponent header_border_interim
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text_interim
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_header
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    TextComponent text_interim
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim
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    PolygonComponent continue_interim
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border_interim
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text [set every repeat] = $interim_footer
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    KeyboardComponent key_resp_interim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_dates
      Code Type = JS
      Begin JS Experiment:
        da = new Date();
        date_start = da.getFullYear() +"-"+ (da.getMonth()+1) +"-"+ da.getDate() +" "+ da.getHours() +":"+ da.getMinutes() +":"+ da.getSeconds();
        psychoJS.experiment.addData("date_start", date_start);
      Begin JS Routine:
        dat = new Date();
        date_within = dat.getFullYear() +"-"+ (dat.getMonth()+1) +"-"+ dat.getDate() +" "+ dat.getHours() +":"+ dat.getMinutes() +":"+ dat.getSeconds();
        psychoJS.experiment.addData("date_within", date_within);
      End JS Routine:
        dat = new Date();
        date_within = dat.getFullYear() +"-"+ (dat.getMonth()+1) +"-"+ dat.getDate() +" "+ dat.getHours() +":"+ dat.getMinutes() +":"+ dat.getSeconds();
        psychoJS.experiment.addData("date_within", date_within);

        if(block_i >= 4){
            d = new Date();
            date_end = d.getFullYear() +"-"+ (d.getMonth()+1) +"-"+ d.getDate() +" "+ d.getHours() +":"+ d.getMinutes() +":"+ d.getSeconds();
            psychoJS.experiment.addData("date_end", date_end);
        }
  Routine instruction2
    PolygonComponent header_border2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text2
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Ihre Aufgabe
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    TextComponent info2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Legen Sie nun bitte Ihre beiden Zeigefinger auf den Tasten "A" und "L" ab.' + "\n\n" + 'Es folgen nun ein paar Übungsdurchgänge.\nEs ist wichtig, dass Sie Ihre beiden Zeigefinger währen aller Durchgänge auf diesen Tasten liegen lassen.' + "\n\n" + 'Zur Erinnerung: Drücken Sie die Taste "A" für "' +  condition[0] + '" (d. h., die Fläche ' + adjective[0] + ' Flecken ist insgesamt größer) und die Taste "L" für "' + condition[1] + '" (d. h., die Fläche ' + adjective[1] + ' Flecken ist insgesamt größer).'
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    PolygonComponent continue_info2
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border2
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      wrapWidth = 3
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      text:
        Um mit den Übungsdurchgängen zu beginnen,
        drücken Sie bitte die Leertaste.
    KeyboardComponent key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    PolygonComponent header_border3
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text3
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Ihre Aufgabe
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    TextComponent info3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Sie haben nun die Übungsdurchgänge beendet." + "\n\n" + "In der nachfolgenden Test-Phase werden Sie 4 Blöcke mit jeweils ca. 100 Durchgängen bearbeiten. Zwischen den einzelnen Test-Blöcken haben Sie jeweils Zeit für eine Pause." + "\n\n" + group_instruction1
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    PolygonComponent continue_info3
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border3
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Um fortzufahren, drücken Sie bitte die Leertaste.
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    KeyboardComponent key_resp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction4
    PolygonComponent header_border4
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text4
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Ihre Aufgabe
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    PolygonComponent continue_info4
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border4
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
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      text:
        Um mit dem 1. von 4 Test-Blöcken zu beginnen,
        drücken Sie bitte die Leertaste.
    KeyboardComponent key_resp4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent info4
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Legen Sie nun bitte Ihre beiden Zeigefinger auf den Tasten "A" ("' + condition[0] + '") und "L" ("' + condition[1] + '") ab.' + '\nEs ist wichtig, dass Sie Ihre beiden Zeigefinger währen aller Durchgänge eines jeden Test-Blocks auf diesen Tasten liegen lassen.' + "\n\n" + "Achtung:" + "\n" + "Sie werden fortan nur noch dann Rückmeldung erhalten, " + group_instruction3
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  Routine prep
    CodeComponent code_prep
      Code Type = JS
      Before JS Experiment:
        var feedback_length = 1.2;
        var ISI_length = 0.3;

        var block_i = -1;
        var block_images = [];
        var block_cutoffs = [];
        var trial_i = 0;
        var textsize = 0.025;
        var upper_text = 0.415;
        var x_scale = 0.05;
        var y_scale = 0.05;

        var color_false = [0.7255, -0.8431, -0.5294];
        var color_correct = [-1.0000, 0.0039, -1.0000];

        var group_instruction1 = "Nun gilt zudem:" + "\n" + "Bitte versuchen Sie, die Aufgabe gut zu bearbeiten: Es geht darum, so schnell wie möglich zu antworten und gleichzeitig möglichst wenige Fehler zu machen.";
        var group_instruction2 = "Welche Fläche ist insgesamt größer?";
        var group_instruction3 = "wenn Sie einen Fehler gemacht haben.";

        var image_path = ''

        var version = 1
      Begin JS Experiment:
        if (group == "acc") {
            group_instruction1 = "Nun gilt zudem:" + "\n" + "Sie werden jeweils sehr wenig Zeit haben, um Ihre Entscheidung zu treffen. Bitte versuchen Sie, die Aufgabe trotz des Zeitdrucks gut zu bearbeiten: Es geht darum, möglichst wenige Fehler zu machen.";
            group_instruction3 = "wenn Sie zu langsam waren.";
        } else if (group == "gutfeeling") {
            group_instruction1 = "Nun gilt zudem:" + "\n" + "Sie werden jeweils sehr wenig Zeit haben, um Ihre Entscheidung zu treffen. Bitte versuchen Sie, die Aufgabe trotz des Zeitdrucks gut zu bearbeiten. Wenn Sie aber merken, dass Sie nicht rechtzeitig antworten können, folgen Sie Ihrem Bauchgefühl.";
            group_instruction3 = "wenn Sie zu langsam waren.";
        } else if (group == "control") {
            group_instruction1 = "Nun gilt zudem:" + "\n" + "Bitte versuchen Sie, die Aufgabe gut zu bearbeiten: Es geht darum, so schnell wie möglich zu antworten und gleichzeitig möglichst wenige Fehler zu machen.";
            group_instruction3 = "wenn Sie einen Fehler gemacht haben.";
        } else if (group == "gutfeeling2") {
            group_instruction1 = "Nun gilt zudem:" + "\n" + "Sie werden jeweils sehr wenig Zeit haben, um Ihre Entscheidung zu treffen. Bitte versuchen Sie, die Aufgabe trotz des Zeitdrucks gut zu bearbeiten. Wenn Sie sich aber unsicher sind, folgen Sie am besten Ihrem Bauchgefühl.";
            group_instruction3 = "wenn Sie zu langsam waren.";
        }
      Begin JS Routine:
        //Save date within
        dat = new Date();
        date_within = dat.getFullYear() +"-"+ (dat.getMonth()+1) +"-"+ dat.getDate() +" "+ dat.getHours() +":"+ dat.getMinutes() +":"+ dat.getSeconds();
        psychoJS.experiment.addData("date_within", date_within);

        block_i +=1
        block_images = imgs[block_i]['imgs'];
        block_cutoffs = imgs[block_i]['cutoff'];
        if(parseInt(expInfo["version"]) === 31415){
            block_images = [block_images[0]]
            block_images.push(imgs[block_i]['imgs'][1])
        }

        trial_i = 0
        image_path = block_images[trial_i]
        image_size = [12.5 * x_scale , 12.5 * y_scale]
        upper_text = 7.5 * y_scale

        if(block_i < 4){
            interim_header = "Ihre Aufgabe"
            interim = "Sie haben nun den " + block_i + ". von 4 Test-Blöcken bearbeitet." + "\n\n" + "Gerne können Sie jetzt eine Pause machen." + "\n\n" + "Bitte verlassen Sie weiterhin NICHT den Vollbildmodus, d. h. auch NICHT während der Pause."
            interim_footer = "Um fortzufahren, drücken Sie bitte die Leertaste."
        }else{
            interim_header = "Prima!"
             interim = "Sie haben nun auch die letzten Test-Durchgänge beendet." +  "\n\n" + "Zum Abschluss beantworten Sie bitte die nachfolgenden Fragen." + "\n\n" + 'Hierfür werden Sie auf eine neue Seite weitergeleitet, nachdem Sie die Leertaste gedrückt haben, abwarten, bis das Pop-up-Fenster mit der Nachricht "Closing the session. Please wait a few moments" verschwindet und beim darauffolgenden Pop-up-Fenster mit der Nachricht "Thank you for you patience" auf "Ok" geklickt haben.' + "\n\n" + "Bitte schließen Sie NICHT das Fenster!"
            interim_footer = "Um zu den Fragen weitergeleitet zu werden, drücken Sie bitte die Leertaste."
        }

        if(block_i != 0){
            deadline = deadline_test
            if (group == "acc") {
                group_instruction2 = "Welche Fläche ist insgesamt größer?" + "\n" + "Bitte versuchen Sie, die Aufgabe trotz des Zeitdrucks gut zu bearbeiten: Es geht darum, möglichst wenige Fehler zu machen.";
            } else if (group == "gutfeeling") {
                group_instruction2 = "Welche Fläche ist insgesamt größer?" + "\n" + "Bitte versuchen Sie, die Aufgabe trotz des Zeitdrucks gut zu bearbeiten. Wenn Sie aber merken, dass Sie nicht rechtzeitig antworten können, folgen Sie Ihrem Bauchgefühl.";
            } else if (group == "control") {
                group_instruction2 = "Welche Fläche ist insgesamt größer?" + "\n" + "Bitte versuchen Sie, die Aufgabe gut zu bearbeiten: Es geht darum, so schnell wie möglich zu antworten und gleichzeitig möglichst wenige Fehler zu machen.";
            } else if (group == "gutfeeling2") {
                group_instruction2 = "Welche Fläche ist insgesamt größer?" + "\n" + "Bitte versuchen Sie, die Aufgabe trotz des Zeitdrucks gut zu bearbeiten. Wenn Sie sich aber unsicher sind, folgen Sie am besten Ihrem Bauchgefühl.";
            }
        }
  Routine setup
    CodeComponent code_setup
      Code Type = JS
      Before JS Experiment:
        var image_size = [0.7, 0.7];
        var condition = ["Hell", "Dunkel"];
        var adjective = ["heller", "dunkler"];
        var key_assigned = ["A", "L"];
        var hell = "a";
        var dunkel = "l";
        var prop = "51.5";

        var deadline = 99999;
        var deadline_test = 99999;

        var groups = ["acc", "acc", "acc"]; //["control", "acc", "gutfeeling2"]; //
        var group = "control"; //"acc"; //"control //gutfeeling2

        var imgs = []

        var safari = false;
        var opera = false;

        function isFullscreen(){
            var isInFullScreen = (document.fullscreenElement && document.fullscreenElement !== null) ||
                (document.webkitFullscreenElement && document.webkitFullscreenElement !== null) ||
                (document.mozFullScreenElement && document.mozFullScreenElement !== null) ||
                (document.msFullscreenElement && document.msFullscreenElement !== null);
                return isInFullScreen
        }

        function isBrowserUpToDate() {
          var userAgent = navigator.userAgent;

          // Check if the browser is Chrome
          if (/Chrome\/(\d+)/.test(userAgent)) {
            // Get the version number of Chrome
            var version = parseInt(RegExp.$1);
            // Check if the version of Chrome is at least 109
            if (version >= 109) {
              return true;
            }
          }
          // Check if the browser is Firefox
          else if (/Firefox\/(\d+)/.test(userAgent)) {
            // Get the version number of Firefox
            var version = parseInt(RegExp.$1);
            // Check if the version of Firefox is at least 102
            if (version >= 102) {
              return true;
            }
          }
          // Check if the browser is Safari
          else if (/^Mozilla\/5.0 \(.+?\) AppleWebKit\/(\d+)\./.test(userAgent)) {
            safari = true;
            // Get the version number of Safari
            var version = parseInt(RegExp.$1);
            // Check if the version of Safari is at least 16
            if (version >= 16) {
              return true;
            }
          }
          // Check if the browser is Edge
          else if (/Edg\/(\d+)/.test(userAgent)) {
            // Get the version number of Edge
            var version = parseInt(RegExp.$1);
            // Check if the version of Edge is at least 110
            if (version >= 110) {
              return true;
            }
          }

          // The browser is not up to date
          return false;
        }
        var browser_check
        var userAgent
      Begin JS Experiment:
        //Switch keys
        /*
        if ((parseInt(expInfo["pp"])) % 2){
            condition = ["Dunkel", "Hell"];
            adjective = ["dunkler", "heller"];
            key_assigned = ["L", "A"];
            hell = "l"; //key_assigned_bright
            dunkel = "a"; //key_assigned_dark
        }

        condition = ["Dunkel", "Hell"];
        adjective = ["dunkler", "heller"];
        key_assigned = ["L", "A"];
        hell = "l"; //key_assigned_bright
        dunkel = "a"; //key_assigned_dark
        */

        //Assign to group
        const sel_group = Math.floor(Math.random() * 3);
        group = groups[sel_group]
        if (group != "control") {
            deadline_test = .9;
        }

        browser_check = isBrowserUpToDate();
        userAgent = navigator.userAgent;
        opera = (navigator.userAgent.match(/Opera|OPR\//) ? true : false);

        imgs = [
          {
            "imgs": ["imgs/blob_144.png", "imgs/blob_301.png", "imgs/blob_114.png", "imgs/blob_249.png", "imgs/blob_131.png", "imgs/blob_58.png", "imgs/blob_381.png", "imgs/blob_211.png", "imgs/blob_166.png", "imgs/blob_98.png", "imgs/blob_212.png", "imgs/blob_74.png", "imgs/blob_321.png", "imgs/blob_124.png", "imgs/blob_218.png", "imgs/blob_320.png"],
            "cutoff": [0.515, 0.485, 0.515, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.485, 0.515, 0.485, 0.515, 0.485, 0.485],
            "brightness": ["bright", "dark", "bright", "dark", "bright", "bright", "dark", "dark", "bright", "bright", "dark", "bright", "dark", "bright", "dark", "dark"],
            "trial_type": ["practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice", "practice"],
            "rotate": ["NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA", "NA"],
            "block": [0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0],
            "size_x": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "size_y": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "trial_nr": [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16]
          },
          {
            "imgs": ["imgs/blob_18.png", "imgs/blob_296.png", "imgs/blob_289.png", "imgs/blob_302.png", "imgs/blob_13.png", "imgs/blob_153.png", "imgs/blob_188.png", "imgs/blob_30.png", "imgs/blob_311.png", "imgs/blob_239.png", "imgs/blob_66.png", "imgs/blob_287.png", "imgs/blob_369.png", "imgs/blob_202.png", "imgs/blob_35.png", "imgs/blob_193.png", "imgs/blob_396.png", "imgs/blob_313.png", "imgs/blob_295.png", "imgs/blob_312.png", "imgs/blob_143.png", "imgs/blob_359.png", "imgs/blob_0.png", "imgs/blob_89.png", "imgs/blob_49.png", "imgs/blob_171.png", "imgs/blob_275.png", "imgs/blob_242.png", "imgs/blob_207.png", "imgs/blob_371.png", "imgs/blob_57.png", "imgs/blob_406.png", "imgs/blob_151.png", "imgs/blob_204.png", "imgs/blob_324.png", "imgs/blob_257.png", "imgs/blob_250.png", "imgs/blob_129.png", "imgs/blob_3.png", "imgs/blob_88.png", "imgs/blob_260.png", "imgs/blob_347.png", "imgs/blob_135.png", "imgs/blob_69.png", "imgs/blob_378.png", "imgs/blob_215.png", "imgs/blob_185.png", "imgs/blob_267.png", "imgs/blob_278.png", "imgs/blob_362.png", "imgs/blob_391.png", "imgs/blob_152.png", "imgs/blob_280.png", "imgs/blob_9.png", "imgs/blob_137.png", "imgs/blob_189.png", "imgs/blob_15.png", "imgs/blob_12.png", "imgs/blob_87.png", "imgs/blob_80.png", "imgs/blob_187.png", "imgs/blob_310.png", "imgs/blob_100.png", "imgs/blob_247.png", "imgs/blob_339.png", "imgs/blob_322.png", "imgs/blob_125.png", "imgs/blob_269.png", "imgs/blob_77.png", "imgs/blob_271.png", "imgs/blob_254.png", "imgs/blob_109.png", "imgs/blob_394.png", "imgs/blob_308.png", "imgs/blob_355.png", "imgs/blob_67.png", "imgs/blob_91.png", "imgs/blob_262.png", "imgs/blob_345.png", "imgs/blob_107.png", "imgs/blob_165.png", "imgs/blob_56.png", "imgs/blob_363.png", "imgs/blob_294.png", "imgs/blob_400.png", "imgs/blob_72.png", "imgs/blob_1.png", "imgs/blob_180.png", "imgs/blob_279.png", "imgs/blob_119.png", "imgs/blob_7.png", "imgs/blob_4.png", "imgs/blob_263.png", "imgs/blob_37.png"],
            "cutoff": [0.515, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.25, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.75, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.25, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.485, 0.485, 0.515, 0.25, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.75, 0.515, 0.515, 0.515, 0.485, 0.515, 0.515, 0.515, 0.485, 0.515],
            "brightness": ["bright", "dark", "dark", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "dark", "dark", "dark", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "bright", "bright", "bright", "bright", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "bright", "dark", "bright", "bright", "bright", "dark", "bright"],
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test"],
            "rotate": ["NA", 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, "NA", 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, "NA", 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, "NA", 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, "NA", 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, "NA", 0, 0, 0, 0, 0, 0, 0, 0, 0],
            "block": [1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1],
            "size_x": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "size_y": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "trial_nr": [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46, 47, 48, 49, 50, 51, 52, 53, 54, 55, 56, 57, 58, 59, 60, 61, 62, 63, 64, 65, 66, 67, 68, 69, 70, 71, 72, 73, 74, 75, 76, 77, 78, 79, 80, 81, 82, 83, 84, 85, 86, 87, 88, 89, 90, 91, 92, 93, 94]
          },
          {
            "imgs": ["imgs/blob_366.png", "imgs/blob_296_r1.png", "imgs/blob_289_r1.png", "imgs/blob_302_r1.png", "imgs/blob_13_r1.png", "imgs/blob_153_r1.png", "imgs/blob_188_r1.png", "imgs/blob_30_r1.png", "imgs/blob_311_r1.png", "imgs/blob_239_r1.png", "imgs/blob_66_r1.png", "imgs/blob_287_r1.png", "imgs/blob_369_r1.png", "imgs/blob_392.png", "imgs/blob_202_r1.png", "imgs/blob_35_r1.png", "imgs/blob_193_r1.png", "imgs/blob_313_r1.png", "imgs/blob_295_r1.png", "imgs/blob_312_r1.png", "imgs/blob_143_r1.png", "imgs/blob_359_r1.png", "imgs/blob_0_r1.png", "imgs/blob_89_r1.png", "imgs/blob_49_r1.png", "imgs/blob_171_r1.png", "imgs/blob_275_r1.png", "imgs/blob_242_r1.png", "imgs/blob_207_r1.png", "imgs/blob_371_r1.png", "imgs/blob_57_r1.png", "imgs/blob_151_r1.png", "imgs/blob_204_r1.png", "imgs/blob_324_r1.png", "imgs/blob_257_r1.png", "imgs/blob_250_r1.png", "imgs/blob_129_r1.png", "imgs/blob_393.png", "imgs/blob_3_r1.png", "imgs/blob_88_r1.png", "imgs/blob_260_r1.png", "imgs/blob_347_r1.png", "imgs/blob_135_r1.png", "imgs/blob_69_r1.png", "imgs/blob_378_r1.png", "imgs/blob_215_r1.png", "imgs/blob_185_r1.png", "imgs/blob_267_r1.png", "imgs/blob_278_r1.png", "imgs/blob_398.png", "imgs/blob_362_r1.png", "imgs/blob_152_r1.png", "imgs/blob_280_r1.png", "imgs/blob_9_r1.png", "imgs/blob_137_r1.png", "imgs/blob_189_r1.png", "imgs/blob_15_r1.png", "imgs/blob_12_r1.png", "imgs/blob_87_r1.png", "imgs/blob_80_r1.png", "imgs/blob_187_r1.png", "imgs/blob_310_r1.png", "imgs/blob_100_r1.png", "imgs/blob_247_r1.png", "imgs/blob_339_r1.png", "imgs/blob_322_r1.png", "imgs/blob_125_r1.png", "imgs/blob_269_r1.png", "imgs/blob_77_r1.png", "imgs/blob_271_r1.png", "imgs/blob_254_r1.png", "imgs/blob_109_r1.png", "imgs/blob_308_r1.png", "imgs/blob_355_r1.png", "imgs/blob_67_r1.png", "imgs/blob_407.png", "imgs/blob_91_r1.png", "imgs/blob_262_r1.png", "imgs/blob_345_r1.png", "imgs/blob_107_r1.png", "imgs/blob_165_r1.png", "imgs/blob_56_r1.png", "imgs/blob_363_r1.png", "imgs/blob_294_r1.png", "imgs/blob_72_r1.png", "imgs/blob_1_r1.png", "imgs/blob_180_r1.png", "imgs/blob_279_r1.png", "imgs/blob_119_r1.png", "imgs/blob_7_r1.png", "imgs/blob_4_r1.png", "imgs/blob_263_r1.png", "imgs/blob_37_r1.png", "imgs/blob_404.png"],
            "cutoff": [0.485, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.25, 0.485, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.25, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.75, 0.485, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.515, 0.75, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.515, 0.515, 0.515, 0.485, 0.515, 0.75],
            "brightness": ["dark", "dark", "dark", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "dark", "bright", "dark", "dark", "dark", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "dark", "dark", "bright", "bright", "dark", "dark", "dark", "dark", "bright", "dark", "bright", "bright", "dark", "dark", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "bright", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "bright", "bright", "bright", "bright", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "dark", "dark", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "bright", "bright", "bright", "dark", "bright", "bright"],
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention"],
            "rotate": ["NA", 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, "NA", 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, "NA", 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, "NA", 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, "NA", 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, 90, "NA"],
            "block": [2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2],
            "size_x": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "size_y": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "trial_nr": [95, 96, 97, 98, 99, 100, 101, 102, 103, 104, 105, 106, 107, 108, 109, 110, 111, 112, 113, 114, 115, 116, 117, 118, 119, 120, 121, 122, 123, 124, 125, 126, 127, 128, 129, 130, 131, 132, 133, 134, 135, 136, 137, 138, 139, 140, 141, 142, 143, 144, 145, 146, 147, 148, 149, 150, 151, 152, 153, 154, 155, 156, 157, 158, 159, 160, 161, 162, 163, 164, 165, 166, 167, 168, 169, 170, 171, 172, 173, 174, 175, 176, 177, 178, 179, 180, 181, 182, 183, 184, 185, 186, 187, 188]
          },
          {
            "imgs": ["imgs/blob_377.png", "imgs/blob_296_r2.png", "imgs/blob_289_r2.png", "imgs/blob_302_r2.png", "imgs/blob_13_r2.png", "imgs/blob_153_r2.png", "imgs/blob_188_r2.png", "imgs/blob_30_r2.png", "imgs/blob_311_r2.png", "imgs/blob_239_r2.png", "imgs/blob_66_r2.png", "imgs/blob_287_r2.png", "imgs/blob_369_r2.png", "imgs/blob_202_r2.png", "imgs/blob_35_r2.png", "imgs/blob_193_r2.png", "imgs/blob_313_r2.png", "imgs/blob_295_r2.png", "imgs/blob_402.png", "imgs/blob_312_r2.png", "imgs/blob_143_r2.png", "imgs/blob_359_r2.png", "imgs/blob_0_r2.png", "imgs/blob_89_r2.png", "imgs/blob_49_r2.png", "imgs/blob_171_r2.png", "imgs/blob_275_r2.png", "imgs/blob_242_r2.png", "imgs/blob_401.png", "imgs/blob_207_r2.png", "imgs/blob_371_r2.png", "imgs/blob_57_r2.png", "imgs/blob_151_r2.png", "imgs/blob_204_r2.png", "imgs/blob_324_r2.png", "imgs/blob_257_r2.png", "imgs/blob_250_r2.png", "imgs/blob_129_r2.png", "imgs/blob_3_r2.png", "imgs/blob_88_r2.png", "imgs/blob_260_r2.png", "imgs/blob_347_r2.png", "imgs/blob_135_r2.png", "imgs/blob_69_r2.png", "imgs/blob_378_r2.png", "imgs/blob_215_r2.png", "imgs/blob_185_r2.png", "imgs/blob_267_r2.png", "imgs/blob_278_r2.png", "imgs/blob_362_r2.png", "imgs/blob_152_r2.png", "imgs/blob_280_r2.png", "imgs/blob_9_r2.png", "imgs/blob_389.png", "imgs/blob_137_r2.png", "imgs/blob_189_r2.png", "imgs/blob_15_r2.png", "imgs/blob_12_r2.png", "imgs/blob_87_r2.png", "imgs/blob_80_r2.png", "imgs/blob_187_r2.png", "imgs/blob_310_r2.png", "imgs/blob_100_r2.png", "imgs/blob_247_r2.png", "imgs/blob_339_r2.png", "imgs/blob_322_r2.png", "imgs/blob_125_r2.png", "imgs/blob_269_r2.png", "imgs/blob_77_r2.png", "imgs/blob_271_r2.png", "imgs/blob_254_r2.png", "imgs/blob_109_r2.png", "imgs/blob_308_r2.png", "imgs/blob_397.png", "imgs/blob_355_r2.png", "imgs/blob_67_r2.png", "imgs/blob_91_r2.png", "imgs/blob_262_r2.png", "imgs/blob_345_r2.png", "imgs/blob_107_r2.png", "imgs/blob_165_r2.png", "imgs/blob_56_r2.png", "imgs/blob_363_r2.png", "imgs/blob_294_r2.png", "imgs/blob_72_r2.png", "imgs/blob_1_r2.png", "imgs/blob_180_r2.png", "imgs/blob_388.png", "imgs/blob_279_r2.png", "imgs/blob_119_r2.png", "imgs/blob_7_r2.png", "imgs/blob_4_r2.png", "imgs/blob_263_r2.png", "imgs/blob_37_r2.png"],
            "cutoff": [0.485, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.75, 0.485, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.75, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.25, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.515, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.485, 0.485, 0.515, 0.485, 0.25, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.25, 0.485, 0.515, 0.515, 0.515, 0.485, 0.515],
            "brightness": ["dark", "dark", "dark", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "bright", "bright", "dark", "dark", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "bright", "bright", "bright", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "bright"],
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test"],
            "rotate": ["NA", 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, "NA", 180, 180, 180, 180, 180, 180, 180, 180, 180, "NA", 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, "NA", 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, "NA", 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, 180, "NA", 180, 180, 180, 180, 180, 180],
            "block": [3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3, 3],
            "size_x": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "size_y": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "trial_nr": [189, 190, 191, 192, 193, 194, 195, 196, 197, 198, 199, 200, 201, 202, 203, 204, 205, 206, 207, 208, 209, 210, 211, 212, 213, 214, 215, 216, 217, 218, 219, 220, 221, 222, 223, 224, 225, 226, 227, 228, 229, 230, 231, 232, 233, 234, 235, 236, 237, 238, 239, 240, 241, 242, 243, 244, 245, 246, 247, 248, 249, 250, 251, 252, 253, 254, 255, 256, 257, 258, 259, 260, 261, 262, 263, 264, 265, 266, 267, 268, 269, 270, 271, 272, 273, 274, 275, 276, 277, 278, 279, 280, 281, 282]
          },
          {
            "imgs": ["imgs/blob_103.png", "imgs/blob_296_r3.png", "imgs/blob_289_r3.png", "imgs/blob_302_r3.png", "imgs/blob_13_r3.png", "imgs/blob_153_r3.png", "imgs/blob_188_r3.png", "imgs/blob_30_r3.png", "imgs/blob_311_r3.png", "imgs/blob_399.png", "imgs/blob_239_r3.png", "imgs/blob_66_r3.png", "imgs/blob_287_r3.png", "imgs/blob_369_r3.png", "imgs/blob_202_r3.png", "imgs/blob_35_r3.png", "imgs/blob_193_r3.png", "imgs/blob_313_r3.png", "imgs/blob_295_r3.png", "imgs/blob_312_r3.png", "imgs/blob_143_r3.png", "imgs/blob_359_r3.png", "imgs/blob_0_r3.png", "imgs/blob_89_r3.png", "imgs/blob_49_r3.png", "imgs/blob_171_r3.png", "imgs/blob_275_r3.png", "imgs/blob_242_r3.png", "imgs/blob_207_r3.png", "imgs/blob_390.png", "imgs/blob_371_r3.png", "imgs/blob_57_r3.png", "imgs/blob_151_r3.png", "imgs/blob_204_r3.png", "imgs/blob_324_r3.png", "imgs/blob_257_r3.png", "imgs/blob_250_r3.png", "imgs/blob_129_r3.png", "imgs/blob_3_r3.png", "imgs/blob_88_r3.png", "imgs/blob_260_r3.png", "imgs/blob_347_r3.png", "imgs/blob_135_r3.png", "imgs/blob_69_r3.png", "imgs/blob_378_r3.png", "imgs/blob_215_r3.png", "imgs/blob_185_r3.png", "imgs/blob_267_r3.png", "imgs/blob_278_r3.png", "imgs/blob_362_r3.png", "imgs/blob_152_r3.png", "imgs/blob_280_r3.png", "imgs/blob_9_r3.png", "imgs/blob_137_r3.png", "imgs/blob_189_r3.png", "imgs/blob_15_r3.png", "imgs/blob_395.png", "imgs/blob_12_r3.png", "imgs/blob_87_r3.png", "imgs/blob_80_r3.png", "imgs/blob_187_r3.png", "imgs/blob_310_r3.png", "imgs/blob_100_r3.png", "imgs/blob_247_r3.png", "imgs/blob_339_r3.png", "imgs/blob_322_r3.png", "imgs/blob_125_r3.png", "imgs/blob_269_r3.png", "imgs/blob_77_r3.png", "imgs/blob_271_r3.png", "imgs/blob_254_r3.png", "imgs/blob_109_r3.png", "imgs/blob_308_r3.png", "imgs/blob_355_r3.png", "imgs/blob_403.png", "imgs/blob_67_r3.png", "imgs/blob_91_r3.png", "imgs/blob_262_r3.png", "imgs/blob_345_r3.png", "imgs/blob_107_r3.png", "imgs/blob_165_r3.png", "imgs/blob_56_r3.png", "imgs/blob_363_r3.png", "imgs/blob_294_r3.png", "imgs/blob_72_r3.png", "imgs/blob_1_r3.png", "imgs/blob_180_r3.png", "imgs/blob_279_r3.png", "imgs/blob_405.png", "imgs/blob_119_r3.png", "imgs/blob_7_r3.png", "imgs/blob_4_r3.png", "imgs/blob_263_r3.png", "imgs/blob_37_r3.png"],
            "cutoff": [0.515, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.75, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.485, 0.485, 0.485, 0.25, 0.485, 0.515, 0.515, 0.485, 0.485, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.515, 0.515, 0.515, 0.25, 0.515, 0.515, 0.515, 0.515, 0.485, 0.515, 0.485, 0.485, 0.485, 0.515, 0.485, 0.515, 0.485, 0.485, 0.515, 0.485, 0.485, 0.75, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.485, 0.515, 0.515, 0.515, 0.485, 0.75, 0.515, 0.515, 0.515, 0.485, 0.515],
            "brightness": ["bright", "dark", "dark", "dark", "bright", "bright", "bright", "bright", "dark", "bright", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "dark", "dark", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "dark", "dark", "dark", "dark", "bright", "bright", "dark", "dark", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "dark", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "bright", "dark", "dark", "dark", "bright", "dark", "bright", "dark", "dark", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "dark", "bright", "bright", "bright", "dark", "bright", "bright", "bright", "bright", "dark", "bright"],
            "trial_type": ["warmup", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "test", "attention", "test", "test", "test", "test", "test"],
            "rotate": ["NA", 270, 270, 270, 270, 270, 270, 270, 270, "NA", 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, "NA", 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, "NA", 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, "NA", 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, 270, "NA", 270, 270, 270, 270, 270],
            "block": [4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4, 4],
            "size_x": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "size_y": [750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750, 750],
            "trial_nr": [283, 284, 285, 286, 287, 288, 289, 290, 291, 292, 293, 294, 295, 296, 297, 298, 299, 300, 301, 302, 303, 304, 305, 306, 307, 308, 309, 310, 311, 312, 313, 314, 315, 316, 317, 318, 319, 320, 321, 322, 323, 324, 325, 326, 327, 328, 329, 330, 331, 332, 333, 334, 335, 336, 337, 338, 339, 340, 341, 342, 343, 344, 345, 346, 347, 348, 349, 350, 351, 352, 353, 354, 355, 356, 357, 358, 359, 360, 361, 362, 363, 364, 365, 366, 367, 368, 369, 370, 371, 372, 373, 374, 375, 376]
          }
        ]
      Each JS Frame:
        if(resources.status == FINISHED){
            continueRoutine = False
        }
      End JS Routine:
        psychoJS.experiment.addData('key_bright', hell);
        psychoJS.experiment.addData('key_dark', dunkel);
    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['rsc/bank-1300155_640.png']
      startVal [time (s)] = 0
  Routine instruction1
    PolygonComponent header_border1
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text1
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Ihre Aufgabe
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    TextComponent info1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $'Im Mittelpunkt der Studie steht eine Entscheidungsaufgabe:' + '\n' + 'Ihnen werden in mehreren Durchgängen Quadrate mit hellen und dunklen Flächen (sog. Fleckenbilder) gezeigt. Ihre Aufgabe ist es, zu beurteilen, welche Fläche insgesamt größer ist.' + '\n\n' + 'Wenn die Fläche ' + adjective[0] + ' Flecken insgesamt größer ist, drücken Sie bitte die Taste "A" für die Antwort "' + condition[0] + '".' + "\n" + 'Wenn die Fläche ' + adjective[1] + ' Flecken insgesamt größer ist, drücken Sie bitte die Taste "L" für die Antwort "' + condition[1] + '".' + '\n\n' + 'Für die Hälfte aller Fleckenbilder ist "' + condition[0] + '" die korrekte Antwort, für die andere Hälfte ist "' + condition[1] + '" die korrekte Antwort.' + "\n\n" + 'Vor der Präsentation jedes Fleckenbilds erscheint ein Kreuz in der Mitte des Bildschirms. Bitte richten Sie in jedem Durchgang Ihren Blick auf das Kreuz, bis das Fleckenbild erscheint.'
    PolygonComponent continue_info1
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border1
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Um fortzufahren, drücken Sie bitte die Leertaste.
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    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine scaling
    PolygonComponent header_border_scaling
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0, .44)
      shape = rectangle
      size = (2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent header_text_scaling
      letterHeight = 0.05
      pos = (0, .44)
      startVal [time (s)] = 0.0
      text = Bevor es losgeht...
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    CodeComponent scale_code
      Code Type = JS
      Begin JS Experiment:
        show_keys = 0;
        show_touch = 0;
        if ((expInfo["device type"] === "Touch screen")) {
            show_touch = 1;
        } else {
            show_keys = 1;
        }
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
      Begin JS Routine:
        console.log("key start");
        psychoJS.eventManager.clearEvents();
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys();
        if (keys.length) {
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if ((_pj.in_es6("space", keys) && (t > 1))) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys)) {
                    y_scale = (Math.round(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys)) {
                        y_scale = (Math.round(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys)) {
                            x_scale = (Math.round(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys)) {
                                x_scale = (Math.round(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            screen_height = (Math.round(((vsize * 10) / y_scale)) / 10);
            //text_bottom.text = (((((((("X Größe = " + x_scale.toString()) + unittext) + " pro cm, Y Scale = ") + y_scale.toString()) + unittext) + " per cm\nScreen height = ") + screen_height.toString()) + " cm\n\nPress the space bar when done");
            ccimage.size = [(x_size * x_scale), (y_size * y_scale)];
        }
      End JS Routine:
        psychoJS.experiment.addData("X Scale", x_scale);
        psychoJS.experiment.addData("Y Scale", y_scale);
    TextComponent text_top
      letterHeight = 0.03
      pos = (0, 0.155)
      startVal [time (s)] = 0.0
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      text:
        Bitte passen Sie die Größe des Bilds an die Größe einer Zahlungskarte (z. B. Kredit- oder EC-Karte) an.
        Dies dient dazu, dass bei allen Teilnehmenden das Experiment gleich groß dargestellt wird.
        Halten Sie nun also eine Zahlungskarte vor den Bildschirm und bedienen die Pfeiltasten Ihrer Tastatur, sodass die Größe des Bilds der Größe der Zahlungskarte gleicht.

        ↑ Pfeil nach oben für höher
        ↓ Pfeil nach unten für weniger hoch
        ← Pfeil nach links für schmaler
        → Pfeil nach rechts für breiter
    TextComponent text_bottom
      disabled = True
      letterHeight [set every repeat] = 0.03
      pos = (0, -0.23)
      startVal [time (s)] = 0.0
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      text:
        ↑ Pfeil nach oben für höher
        ↓ Pfeil nach unten für weniger hoch
        ← Pfeil nach links für schmaler
        → Pfeil nach rechts für breiter
    ImageComponent ccimage
      image = rsc/bank-1300155_640.png
      pos = (0, -0.23)
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    PolygonComponent continue_info_scaling
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent continue_border_scaling
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      text = Bitte fahren Sie erst durch Drücken der Leertaste fort, wenn die Bild-Größe stimmt.
      wrapWidth = 5
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  Routine feedback
    TextComponent trial_instruction_text_fb
      letterHeight = textsize
      pos = (0, upper_text)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text [set every repeat] = $group_instruction2
      wrapWidth = 1
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    PolygonComponent a_border_fb
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_length
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    PolygonComponent l_border_fb
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
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    TextComponent label_a_fb
      letterHeight = 0.03
      pos = (-.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text [set every repeat] = $condition[0]
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    TextComponent label_l_fb
      letterHeight = 0.03
      pos = (.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text [set every repeat] = $condition[1]
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    TextComponent a_key_fb
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text = A
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    TextComponent l_key_fb
      color = black
      letterHeight = 0.05
      pos = (.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text = L
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    CodeComponent code_fb
      Code Type = JS
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      Before JS Experiment:
        var acc_responses = 0
        var delayed_responses = 0
        var in_time_responses = 0

        var condition_met_acc = 0
        var condition_met_fullscreen = 0
        var condition_met = 0

        var fully_screenys = 0
      End JS Experiment:
        psychoJS.setRedirectUrls(myCompletedURL, 'about:blank');
      End JS Routine:
        psychoJS.experiment.addData('cutoff', block_cutoffs[trial_i]);
        psychoJS.experiment.addData('cutoff_var', cutoff);
        psychoJS.experiment.addData('cutoff_translated', cutoff_translated);
        psychoJS.experiment.addData('image', block_images[trial_i]);
        psychoJS.experiment.addData('session', (parseInt(expInfo["session"])));
        psychoJS.experiment.addData('deadline', deadline);
        psychoJS.experiment.addData('image_size', image_size[0]);
        psychoJS.experiment.addData('group', group);

        psychoJS.experiment.addData('feedback_text', feedback_text);
        psychoJS.experiment.addData('block', block_i);
        psychoJS.experiment.addData('trial', trial_i);
        psychoJS.experiment.addData('trial_type', trial_type);
        psychoJS.experiment.addData('Fullscreen', isFullscreen());
        psychoJS.experiment.addData('screen_height', screen_height);
        psychoJS.experiment.addData('height_pixel', $(window).height());
        psychoJS.experiment.addData('width_pixel', $(window).width());

        if(block_i != -1){
            if(isFullscreen() != 1){ //i.e., Vollansicht verlassen
                fully_screenys -= 1
            }
            psychoJS.experiment.addData('fully_screenys', fully_screenys);
        }
        if (block_i > 0){
            psychoJS.experiment.addData('acc_responses', acc_responses);
            psychoJS.experiment.addData('delayed_responses', delayed_responses);
            psychoJS.experiment.addData('in_time_responses', in_time_responses);
        }

        condition_met_acc = acc_responses/(in_time_responses + delayed_responses) > 0.5 ? 1 : 0
        condition_met_fullscreen = fully_screenys < 0 ? 0: 1

        condition_met = (condition_met_acc + condition_met_fullscreen)
        psychoJS.experiment.addData('condition_met_acc', condition_met_acc);
        psychoJS.experiment.addData('condition_met_fullscreen', condition_met_fullscreen);
        psychoJS.experiment.addData('condition_met', condition_met);
        //myCompletedURL = "https://www.umfragen.uni-kiel.de/index.php/873982?lang=de&pp=" + expInfo["pp"] + "&ext="
        myCompletedURL = "https://www.soscisurvey.de/deadline_main_post/?pp=" + expInfo["pp"] + "&ext="
        if(condition_met_acc==1){//mehr als50%
            if(condition_met_fullscreen==0){//mal fullscreen verlassen
                myCompletedURL += '42'
            }else{
                myCompletedURL += '3257' //bonus erfolgt
            }
        }else{
            if(condition_met_fullscreen==0){//mal fullscreen verlassen
                myCompletedURL += '2039'
            }else{
                myCompletedURL += '1038'
            }
        }

        myCompletedURL += '&rty=0912313'

        psychoJS.experiment.addData('myCompletedURL', myCompletedURL);
    TextComponent text_fb
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_length
      text [set every repeat] = $feedback_text
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  Routine blank_screen
    TextComponent trial_instruction_text_ISI
      letterHeight = textsize
      pos = (0, upper_text)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_length
      text [set every repeat] = $group_instruction2
      wrapWidth = 1
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    PolygonComponent a_border3
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ISI_length
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    PolygonComponent l_border3
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_length
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    TextComponent label_a3
      letterHeight = 0.03
      pos = (-.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_length
      text [set every repeat] = $condition[0]
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    TextComponent label_l3
      letterHeight = 0.03
      pos = (.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_length
      text [set every repeat] = $condition[1]
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    TextComponent a_key3
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_length
      text = A
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    TextComponent l_key3
      color = black
      letterHeight = 0.05
      pos = (.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_length
      text = L
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    CodeComponent code_2
      Code Type = JS
      End JS Routine:
        trial_i += 1
        image_path = block_images[trial_i]
  Routine countdown
    TextComponent trial_instruction_text1
      letterHeight = textsize
      pos = (0, upper_text)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $group_instruction2
      wrapWidth = 1
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    PolygonComponent a_border1
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    PolygonComponent l_border1
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent label_a1
      letterHeight = 0.03
      pos = (-.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $condition[0]
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    TextComponent label_l1
      letterHeight = 0.03
      pos = (.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $condition[1]
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    TextComponent a_key1
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = A
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    TextComponent l_key1
      color = black
      letterHeight = 0.05
      pos = (.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = L
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    TextComponent count5
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = •••••
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    TextComponent count4
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = ••••
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    TextComponent count3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = •••
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    TextComponent count2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      text = ••
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    TextComponent count1
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1
      text = •
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  Routine fixation_cross
    TextComponent trial_instruction_text_cross
      letterHeight = textsize
      pos = (0, upper_text)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $group_instruction2
      wrapWidth = 1
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    PolygonComponent a_border_cross
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (-.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent l_border_cross
      fillColor = 0.3255, 0.3255, 0.3255
      lineColor = -0.1461, -0.1461, -0.1461
      lineWidth = 2
      pos = (.5,-0.44)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent label_a_cross
      letterHeight = 0.03
      pos = (-.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $condition[0]
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    TextComponent label_l_cross
      letterHeight = 0.03
      pos = (.5,-0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $condition[1]
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    TextComponent a_key_cross
      color = black
      letterHeight = 0.05
      pos = (-.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = A
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    TextComponent l_key_cross
      color = black
      letterHeight = 0.05
      pos = (.5,-0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = L
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    TextComponent fixation_cross_text
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine browser_out
    CodeComponent code_out
      Code Type = JS
      Before JS Experiment:
        var text_out = ""
        var text_out_time = 0
      Begin JS Routine:
        if(browser_check && !safari && !opera){
            psychoJS.experiment.addData('browser', userAgent);
        }
        if(!browser_check) {
            text_out = 'Leider ist Ihr Browser (' + userAgent + ') nicht mehr aktuell.' + '\n\n' +
            'Bitte updaten Sie Ihren Browser oder öffnen einen anderen, aktuelleren Browser.' +
            '\n\n' + 'Um zur Studie zurückzukehren, nutzen Sie dann bitte den folgenden Link' + '\n' +
            '(Tipp: Notieren Sie sich den Link jetzt):' + '\n' +
            'https://pavlovia.org/psychmeth-uni-kiel/deadline_pretest?pp=' + expInfo["pp"]
            text_out_time = 999999
        }
        if(safari || opera) {
            text_out = 'Für die Studienteilnahme ist Mozilla Firefox, Microsoft Edge oder Google Chrome zu nutzen.' +
            '\n\n' + 'Um teilzunehmen, öffnen Sie bitte einen der genannten Browser.' +
            '\n\n' + 'Nutzen Sie dann bitte den folgenden Link' + '\n' +
            '(Tipp: Notieren Sie sich den Link jetzt):' + '\n' +
            'https://pavlovia.org/psychmeth-uni-kiel/deadline_pretest?pp=' + expInfo["pp"]
            text_out_time = 999999
        }
      End JS Routine:
        if(!browser_check || safari || opera) {
            quitPsychoJS()
        }
    TextComponent out
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_out_time
      text [set every repeat] = $text_out
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    PolygonComponent continue_info_out
      fillColor = -0.1461, -0.1461, -0.1461
      lineColor = -0.1461, -0.1461, -0.1461
      pos = (0, -.462)
      shape = rectangle
      size = (2, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_out_time
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    TextComponent continue_border_out
      letterHeight = 0.03
      pos = (0, -.462)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_out_time
      text = Um die Studie in diesem Fenster zu schließen, drücken Sie bitte zwei Mal die Escape-Taste.
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Flow
  Routine setup
  Routine browser_out
  Routine scaling
  Routine premature_end
  Routine instruction1
  Routine instruction2
  Routine prep
  Routine countdown
  LoopInitiator practice_trials loopType="TrialHandler"
    loopType = sequential
    nReps = block_images.length
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    Routine fixation_cross
    Routine rt_trial
    Routine feedback
    Routine blank_screen
  LoopTerminator practice_trials
  Routine premature_end
  Routine instruction3
  Routine instruction4
  LoopInitiator test_blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = imgs.length-1
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    Routine prep
    Routine countdown
    LoopInitiator test_trials loopType="TrialHandler"
      loopType = sequential
      nReps = block_images.length
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      Routine fixation_cross
      Routine rt_trial
      Routine feedback
      Routine blank_screen
    LoopTerminator test_trials
    Routine premature_end
    Routine Interim
  LoopTerminator test_blocks
